PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FPVS
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Routines
  Routine Welcome
    TextComponent WelTex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the last FPVS task.

        You should focus on the fixation, and press SPACE as quickly as possible if the color of the cross changes to red. Do not move your eyes away from the fixation cross, and keep your body relaxed and stable during the stimulus presentation.

        If you see the resting instruction, you can have a rest, especially relaxing your eyes.

        Please sit comfortablly and press SPACE to begin test
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent start_recording
      address = 0xD010
      startData = 254
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine buffer_trial
  Routine hF_trial
    CodeComponent fix_code
      Code Type = Auto->JS
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      Begin Experiment:
        fixdetect_list = []
        fixdetect_list2 = []
        n = int(length_trial/8)
        for i in range(0,n):
            m = (i*8) + random.randint(1,8)
            m2 = m + 1
            fixdetect_list.append(m)
            fixdetect_list2.append(m2)

        fixdetect_list = fixdetect_list + fixdetect_list2

        trial_currentn = -1
      Begin Routine:
        trial_currentn += 1
        if trial_currentn in fixdetect_list:
            color = "red"
        else:
            color = "blue"
    KeyboardComponent atten_detect
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      storeCorrect = True
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    CodeComponent code_fpvs
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'why it cannot work?' # if this occurs, suggesting sth wrong
      Begin Routine:
        if ((trial_currentn + 1) % 4) == 0:
            loopIdx_lf += 1
            stim_text = lf_data[loopIdx_lf]
        else:
            loopIdx_hf += 1
            stim_text = hf_data[loopIdx_hf]

        trigger_stim_value = stim_text['trigger_val']
        my_stimulus.setText(stim_text['stim'])
      End Routine:
        counterbalance.addData('stim', stim_text['stim'])
        counterbalance.addData('category',  stim_text['category'])
        counterbalance.addData('type',  stim_text['type'])
        counterbalance.addData('trigger_value', stim_text['trigger_val'])
        counterbalance.addData('fixation_color', color)
    TextComponent my_stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    TextComponent fixation
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    ParallelOutComponent trigger_stimuli
      address = 0xD010
      startData = trigger_stim_value
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine lF_trial
    TextComponent lF_sti
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = $lowF
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    CodeComponent lf_code
      Code Type = Auto->JS
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      Begin Routine:
        if (fpvsBlock.thisTrialN % 4) != 0:
            stim = hf_stim
        else:
            stim = lf_stim
  Routine fade
  Routine fix
    CodeComponent fix_code2
      Code Type = Auto->JS
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      Begin Routine:
        if (fpvsBlock.thisTrialN % 8) == 0:
            color = "red"
        else:
            color = "white"
    TextComponent fixation2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent atten_detect2
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine end
    TextComponent endText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Congratualations, you have finished all the experiment!
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    ParallelOutComponent stop_recording
      address = 0xD010
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine randomizer
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trial_currentn = -1
        order_idx += 1
        if order_idx < 6:
            trial_order = random_order[order_idx]

        if trial_order == 1:
            nReps_cond1cue = length_trial
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[0:16]
        elif trial_order == 2:
            nReps_cond1cue = 0
            nReps_cond2cue = length_trial
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[16:32]
        elif trial_order == 3:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = length_trial
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[32:48]
        elif trial_order == 4:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = length_trial
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[48:64]
        elif trial_order == 5:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = length_trial
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[64:80]
        elif trial_order == 6:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = length_trial
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[80:96]
        lf_data = lf_data + lf_data + lf_data

        while True:
            random.shuffle(hf_data)
            judge = 0
            for i in range(0,(len(hf_data)-2)):
                if hf_data[i] == hf_data[i+1]:
                    judge = judge + 1
            if judge == 0:
                break

        while True:
            random.shuffle(lf_data)
            judge = 0
            for i in range(0,(len(lf_data)-2)):
                if lf_data[i] == lf_data[i+1]:
                    judge = judge + 1
            if judge == 0:
                break

        loopIdx_lf = -1
        loopIdx_hf = -1

        # reset buffer
        buffer_idx = -1
        random.shuffle(buffer_data)
  Routine setupExp
    CodeComponent setupConterbalance
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Make random pool
        random_order = []
        order_idx = 0
        for i in range(1,7):
            random_order.append(i)
        random.shuffle(random_order)
        trial_order = random_order[order_idx]
        hf_data = data.importConditions(u'Stimuli_hf_all.xlsx')[0:144]
        length_hf = len(hf_data)
        # generate random buffer
        buffer_idx = -1
        buffer_data = data.importConditions(u'Stimuli_hf_all.xlsx')
        random.shuffle(buffer_data)
        # randomize low frequency stimuli
        length_trial = length_hf + 48
        if trial_order == 1:
            nReps_cond1cue = length_trial
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[0:16]
        elif trial_order == 2:
            nReps_cond1cue = 0
            nReps_cond2cue = length_trial
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[16:32]
        elif trial_order == 3:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = length_trial
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[32:48]
        elif trial_order == 4:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = length_trial
            nReps_cond2target = 0
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[48:64]
        elif trial_order == 5:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = length_trial
            nReps_cond3target = 0
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[64:80]
        elif trial_order == 6:
            nReps_cond1cue = 0
            nReps_cond2cue = 0
            nReps_cond3cue = 0
            nReps_cond1target = 0
            nReps_cond2target = 0
            nReps_cond3target = length_trial
            lf_data = data.importConditions(u'Stimuli_lf_all.xlsx')[80:96]
        # make a dictionary to hold stimulus texts

        lf_data = lf_data + lf_data + lf_data

        while True:
            random.shuffle(hf_data)
            judge = 0
            for i in range(0,(len(hf_data)-2)):
                if hf_data[i] == hf_data[i+1]:
                    judge = judge + 1
            if judge == 0:
                break

        while True:
            random.shuffle(lf_data)
            judge = 0
            for i in range(0,(len(lf_data)-2)):
                if lf_data[i] == lf_data[i+1]:
                    judge = judge + 1
            if judge == 0:
                break

        loopIdx_lf = -1
        loopIdx_hf = -1

        # remove cursor
        win.mouseVisible = False
  Routine buffuerEnd
    TextComponent buf_end_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    TextComponent buf_end_fix
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    CodeComponent buf_end_code
      Code Type = Auto->JS
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      Begin Routine:
        buffer_idx += 1
        buffer_end_stim = buffer_data[buffer_idx]['stim']
        buf_end_txt.setText(buffer_end_stim)

        #trigger_buffer_end_value = buffer_data[buffer_idx]['trigger_val']
    ParallelOutComponent trigger_buffer_end
      address = 0xD010
      startData = 9
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine bufferBegin
    TextComponent buf_bgin_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    TextComponent buf_bgin_fix
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        buffer_idx += 1
        buffer_begin_stim = buffer_data[buffer_idx]['stim']
        buf_bgin_txt.setText(buffer_begin_stim)

        #trigger_buffer_value = buffer_data[buffer_idx]['trigger_val']
    ParallelOutComponent trigger_buffer
      address = 0xD010
      startData = 8
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine rest
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You can have a rest when you see this slide.

        Remembered, try to keep your body relaxed and stable while the words are presented.

        If you are ready, press "SPACE" to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setupExp
  Routine Welcome
  LoopInitiator counterbalance loopType="TrialHandler"
    loopType = random
    nReps = 6
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    LoopInitiator buffer_begin loopType="TrialHandler"
      loopType = random
      nReps = 8
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      Routine bufferBegin
    LoopTerminator buffer_begin
    LoopInitiator cond1cue loopType="TrialHandler"
      loopType = random
      nReps = nReps_cond1cue
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      Routine hF_trial
    LoopTerminator cond1cue
    LoopInitiator cond2cue loopType="TrialHandler"
      loopType = random
      nReps = nReps_cond2cue
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      Routine hF_trial
    LoopTerminator cond2cue
    LoopInitiator cond3cue loopType="TrialHandler"
      loopType = random
      nReps = nReps_cond3cue
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      Routine hF_trial
    LoopTerminator cond3cue
    LoopInitiator con1target loopType="TrialHandler"
      loopType = random
      nReps = nReps_cond1target
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      Routine hF_trial
    LoopTerminator con1target
    LoopInitiator cond2target loopType="TrialHandler"
      loopType = random
      nReps = nReps_cond2target
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      Routine hF_trial
    LoopTerminator cond2target
    LoopInitiator cond3target loopType="TrialHandler"
      loopType = random
      nReps = nReps_cond3target
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      Routine hF_trial
    LoopTerminator cond3target
    LoopInitiator buffer_end loopType="TrialHandler"
      loopType = random
      nReps = 8
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      Routine buffuerEnd
    LoopTerminator buffer_end
    Routine randomizer
    Routine rest
  LoopTerminator counterbalance
  Routine end
