PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1493, 933]
  color = $[-0.169,-0.169,-0.169]
  expName = TNT_test
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Routines
  Routine WelcomeScreen
    TextComponent Welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to this project!

        This is a drop off think/no-think task!

        Press "Space" to move to the next slide
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine IntroPhase1
    TextComponent intro1_title
      color = $TextColour
      letterHeight = FontSize
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Welcome and thank you for agreeing to take part in this study.
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    TextComponent intro1_text
      color = $TextColour
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        This study consists of three experiments designed to investigate how the brain processes memory and attention.

        This will take around 2 hours.

        To try and keep things varied we have split the experiments into shorter blocks. These blocks will be between 5-15 minutes long. You will be given regular short breaks during the blocks, and longer, self-timed breaks between them.

        EEG recording is very sensitive, and even small movements can create noise in the signal which makes analysis difficult. As such, it is important that you are seated comfortably, with your feet on the floor and hands on the desk. Please try to keep your head up and your eyes centred on the screen.

        The researcher will regularly check on you during the session. If for any reason you want the researcher’s attention during the experiments or between check-ins, please knock on the glass window.



        Please press SPACE to continue
    KeyboardComponent intro1_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine IntroPhase2
    TextComponent TNT_intro
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now, let's start our training phase.

        You are going to see the left-hand side members of the previously presented word pairs in different colors on the computer screen.

        If you see a word in ‘Green,’ try to recall the other word previously seen together with this word and say it out loud.

        If you see a word in ‘Red,’ try not to think of the other word previously seen together with this word and do not say it out loud.”
    KeyboardComponent resp_intro2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase1_trial
    CodeComponent pss_ln_code
      Code Type = Auto->JS
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      Begin Experiment:
        rep_pss_learn = len(pss_learn)
        stim_disp = 'it does not work'
      Begin Routine:
        loopIdx += 1
        stim_text = pss_learn[loopIdx]
        stim_disp = stim_text['cue'] + '             ' + stim_text['target']
        WordPairs_all.setText(stim_disp)
      End Routine:
        LearningPhase.addData('cue', pss_learn[loopIdx]['cue']) #where trials is the name of the loop
        LearningPhase.addData('target', pss_learn[loopIdx]['target']) #where trials is the name of the loop
        LearningPhase.addData('cond', pss_learn[loopIdx]['cond']) #where trials is the name of the loop
    TextComponent WordPairs_all
      color = $TextColour
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine phase2_trial
    TextComponent cue_prac
      color = [color]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = [cue]
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    KeyboardComponent fdbk_prac
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine phase1_trial2
    TextComponent blank
      color = $TextColour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent cue_stimili
      color = $TextColour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $cue
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg='no message!'#if this comes up we forgot to update the msg!
        msgcolor = 'white'
      Begin Routine:
         ## Forces routine quit upon reaching criterion
        alreadyLearned = False
        if scoreDict[cue] >= minCorrect:
            continueRoutine = False
            alreadyLearned = True
      End Routine:
        if alreadyLearned:
            Dropoff_phase.addData('correct', 'LEARNED')
        elif resp_drop.keys: #make sure not empty, prevent list index error
            if 'f' in resp_drop.keys:
                msg = 'Correct'
                msgcolor = [-0.0039, 1.0000, -1.0000]
                Dropoff_phase.addData('correct', 1) #where trials is the name of the loop
                scoreDict[cue] += 1
            elif 'j' in resp_drop.keys:
                msg = 'Incorrect'
                msgcolor = [0.7255, -0.8431, -0.5294]
                Dropoff_phase.addData('correct', 0) #store for accuracy
        elif not resp_drop.keys:
            msg = 'Try to speak quickly.'
            msgcolor = [0.7255, -0.8431, -0.5294]
            Dropoff_phase.addData('correct', 'no resp') #store for accuracy

        # See if there are any words that
        # have less than two correct
        haveTrialsLeft = False
        for st in scoreDict:
            if scoreDict[st] < minCorrect:
                haveTrialsLeft = True
                break

        if not haveTrialsLeft:
            Dropoff_phase.finished = True
    KeyboardComponent resp_drop
      allowedKeys = 'f','j'
      correctAns = "f"
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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  Routine trial2_fdbk_2
    TextComponent drop_fdbk
      color [set every repeat] = $msgcolor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    TextComponent drop_target
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text [set every repeat] = $cue + '             ' + target
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  Routine dropIntro
    TextComponent Intro_drop
      color = $TextColour
      letterHeight = FontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we start to learn these words again.

        In this phase, you will be shown a word in each pair and you should recall the other paired word and say it aloud.

        All the word pairs will be tested.

        The word you responded to correctly will be removed automatically from the list.

        You should continually respond and learn again if you can't remember and say the associate word correctly, until all pairs of words are removed.


        Please press SPACE to continue
    KeyboardComponent int_drop_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine setupExp
    CodeComponent setupDic
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # make a dictionary to hold scores for stimulus texts
        scoreDict = {}

        # import stumuli
        allData = data.importConditions(u'Stimuli_TNT.xlsx')
        random.shuffle(allData)
        cond_prac = []
        cond_crat = []
        for k in range(0,len(allData)):
            if allData[k]['cond'] == 'prac':
                cond_prac.append(allData[k])
            else:
                cond_crat.append(allData[k])
        pss_learn = cond_prac[0:int(len(cond_prac)/2)] + cond_crat + cond_prac[int(len(cond_prac)/2):int(len(cond_prac))]

        for dl in allData:
            scoreDict[dl[u'cue']] = 0

        minCorrect = 1
        loopIdx = -1

        #Key parameter
        win.mouseVisible = False
        TextColour = 'white'
        FontSize = 0.03
  Routine drop_fdbk_3
    TextComponent drop_fdbk_4
      color [set every repeat] = $msgcolor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    TextComponent drop_target2
      color = $TextColour
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text [set every repeat] = $cue + '             ' + target
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if alreadyLearned:
            continueRoutine = False
  Routine learningEnd
    TextComponent EndLearning
      color = $TextColour
      letterHeight = FontSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Congratulations! You have completed the learning phase 1.

        Next, we will take a break and set up the EEG, preparing for the next phase!

        Now, please wait for the experimenter's coming.
    KeyboardComponent end_resp
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      syncScreenRefresh = False
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  Routine IntroPhase1_2
    TextComponent intro_phase12
      color = $TextColour
      letterHeight = FontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        TNT - Study Phase

        In this part of the experiment you will be shown 60 pairs of words once each.

        Please try to remember all of the word pairs.

        Word pairs will be presented one pair at a time, one pair after another for 5 s.

        Do not worry if you think you cannot remember all of them at this stage. You will have a chance to remember these word pairs again.

        Later, your memory of these words will be tested. We will show you a word in each pair and ask you to recall the other paired word.


        Please press SPACE to continue
    KeyboardComponent resp_intro12
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine dropIntro_2
    TextComponent Intro_drop2
      color = $TextColour
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Please feel free if you cannot remember at first, the aim of this stage is to help you to learn the word pairs, so the accuracy in this stage will not be recorded.


        Please press SPACE to continue

        Good luck!
    KeyboardComponent intdrop_resp2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine welcome
    KeyboardComponent welcome_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent welcome_title
      color = $TextColour
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Investigating the relationship between attention and memory
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    TextComponent welcome_subtitle
      color = $TextColour
      letterHeight = 0.04
      pos = (0, -0.0)
      startVal [time (s)] = 0.0
      text = The University of Manchester
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    TextComponent welcome_names
      color = $TextColour
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
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      text:
        Researcher: Hangbin Zhang

        Supervisors: Stephen Ball, Jason Taylor
    TextComponent welcome_prompt
      color = $TextColour
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = press SPACE to begin the experiment
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    ImageComponent welcome_uomlogo
      image = UoMLogo.jpg
      pos = (0.5, 0.45)
      size = (0.24, 0.2)
      startVal [time (s)] = 0.0
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Flow
  Routine setupExp
  Routine welcome
  Routine IntroPhase1
  Routine IntroPhase1_2
  LoopInitiator LearningPhase loopType="TrialHandler"
    loopType = sequential
    nReps = rep_pss_learn
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    Routine phase1_trial
  LoopTerminator LearningPhase
  Routine dropIntro
  Routine dropIntro_2
  LoopInitiator Dropoff_phase loopType="TrialHandler"
    conditionsFile = Stimuli_TNT.xlsx
    loopType = random
    nReps = 1000
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    conditions:
      [{'cue': 'c1', 'target': 't1'},
      {'cue': 'c2', 'target': 't2'},
      {'cue': 'c3', 'target': 't3'},
      {'cue': 'c4', 'target': 't4'},
      {'cue': 'c5', 'target': 't5'},
      {'cue': 'c6', 'target': 't6'}]
    Routine phase1_trial2
    Routine drop_fdbk_3
  LoopTerminator Dropoff_phase
  Routine learningEnd
