PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1493, 933]
  color = $(0.0039, 0.0039, 0.0039)
  expName = TNT_phase23
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Routines
  Routine WelcomeScreen
    TextComponent Welcome
      letterHeight = FontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome back to the test!

        Next, you will be tested with EEG recording.

        EEG recording is very sensitive, and even small movements can create noise in the signal which makes analysis difficult. As such, it is important that you are seated comfortably, with your feet on the floor and hands on the desk. Please try to keep your head up and your eyes centred on the screen.


        press SPACE to begin the experiment
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine IntroPhase1
    TextComponent intro_phase1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now  please remember all the 48 pairs of words.

        Later, we will show you one of the word in each pair and asked you recall the other word.

        Please try to remember all of them as much as possible. Noticed, only you can remember all of them, you can enter the next stage.

        Every pair will only be presented once in this stage.
    KeyboardComponent resp_intro1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroPhase2
    TextComponent TNT_intro
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        TNT: TNT phase

        In this part of the experiment you will be completing the attention and memory task.

        You are going to see the left-hand side members of the previously presented word pairs in different colors on the computer screen.

        If you see a word in ‘Green’ font, try to recall the previously paired word with this presented word and keep the associate word in mind.

        If you see a word in ‘Red’ font, try to prevent the previously paired word from coming into your mind.

        If you see a word in 'Black' font, try to pay attention to it.

        Press SPACE to continue.
    KeyboardComponent resp_intro2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase1_trial
    TextComponent say_instru
      color = blue
      letterHeight = 0.025
      pos = (0, -0.05)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text [set every repeat] = SPEAK NOW
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    TextComponent WordPairs_all
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $cue
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    KeyboardComponent LearningTest
      allowedKeys = 'f','j'
      correctAns = 'f'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      storeCorrect = True
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    CodeComponent test1_code
      Code Type = Auto->JS
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      Begin Routine:
        tiral_nall = learning_test.nTotal
        if learning_test.thisN == 0:
            number_correct = 0
      End Routine:
        if LearningTest.keys is not None:
            if 'f' in LearningTest.keys:
                number_correct = number_correct + 1
        acc = round(number_correct*100/tiral_nall,2)
        if (learning_test.thisN + 1) == tiral_nall:
            if acc >= 0.75:
                masg= "Your Accuracy = " + str(acc) + "%. Please press 'space' to continue"
            elif acc < 0.75:
                masg = "Your accuracy is low, please do *not* press any button and wait to learn again."

        learning_test.addData('condition1', condition1)
        learning_test.addData('condition2', condition2)
        learning_test.addData('condition3', condition3)
    ParallelOutComponent StudyTest_trigger
      address = 0xD010
      startData = trigger_val
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent StudyTest_WordNumber
      address = 0xD010
      startData = word_number
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine phase1_trial2
    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent cue_stimili
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $cue
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg='no message!'#if this comes up we forgot to update the msg!
        msgcolor = 'white'
      Begin Routine:
         ## Forces routine quit upon reaching criterion
        alreadyLearned = False
        if scoreDict[cue] >= minCorrect:
            continueRoutine = False
            alreadyLearned = True
      End Routine:
        if alreadyLearned:
            Dropoff_phase.addData('response', 'LEARNED')
            Dropoff_phase.addData('correct', 'LEARNED')

        if resp_drop.keys: #make sure not empty, prevent list index error
            if 'f' in resp_drop.keys:
                msg = 'Correct'
                msgcolor = [-0.0039, 1.0000, -1.0000]
                scoreDict[cue] += 1
            elif 'j' in resp_drop.keys:
                msg = 'Incorrect'
                msgcolor = [0.7255, -0.8431, -0.5294]
        elif not resp_drop.keys:
            msg = 'Try to speak quickly.'
            msgcolor = [0.7255, -0.8431, -0.5294]

        # See if there are any words that
        # have less than two correct
        haveTrialsLeft = False
        for st in scoreDict:
            if scoreDict[st] < minCorrect:
                haveTrialsLeft = True
                break

        if not haveTrialsLeft:
            Dropoff_phase.finished = True
    KeyboardComponent resp_drop
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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  Routine trial2_fdbk_2
    TextComponent drop_fdbk
      color [set every repeat] = $msgcolor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    TextComponent drop_target
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text [set every repeat] = $cue + '             ' + target
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  Routine dropIntro
    TextComponent Intro_drop
      letterHeight = FontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Resting EEG recording ended. Now let's go back to the word pairs.

        In case you have forgotten what you learned earlier, let's test and practice again.

        In this phase, you will be shown a word from each pair. You should recall the other paired word and say it aloud.

        The words you responded to correctly will be removed from the list.

        We will repeat this until you have memorised every word pair.

        Please press SPACE to continue
    KeyboardComponent intDrop_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setupExp
    CodeComponent setupDic
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # make a dictionary to hold scores for stimulus texts
        scoreDict = {}
        allData = data.importConditions(u'Stimuli_TNT.xlsx')
        allData2 = data.importConditions(u'Stimuli_TNT2.xlsx')
        minCorrect = 1
        for dl in allData:
            scoreDict[dl[u'cue']] = 0
        random.shuffle(allData)
        random.shuffle(allData2)

        SubjNum=float(expInfo['participant'])
        if SubjNum%6 == 0:
            think = 'cond1'
            nothink = 'cond2'
            baseline = 'cond3'
            condition1 = 'think'
            condition2 = 'nothink'
            condition3 = 'baseline'
        elif SubjNum%6 == 1:
            think = 'cond2'
            nothink = 'cond1'
            baseline = 'cond3'
            condition1 = 'nothink'
            condition2 = 'think'
            condition3 = 'baseline'
        elif SubjNum%6 == 2:
            think = 'cond3'
            nothink = 'cond1'
            baseline = 'cond2'
            condition1 = 'nothink'
            condition2 = 'baseline'
            condition3 = 'think'
        elif SubjNum%6 == 3:
            think = 'cond1'
            nothink = 'cond3'
            baseline = 'cond2'
            condition1 = 'think'
            condition2 = 'baseline'
            condition3 = 'nothink'
        elif SubjNum%6 == 4:
            think = 'cond2'
            nothink = 'cond3'
            baseline = 'cond1'
            condition1 = 'baseline'
            condition2 = 'think'
            condition3 = 'nothink'
        elif SubjNum%6 == 5:
            think = 'cond3'
            nothink = 'cond2'
            baseline = 'cond1'
            condition1 = 'baseline'
            condition2 = 'nothink'
            condition3 = 'think'

        cond_prac = []
        cond_think = []
        cond_nothink = []
        cond_base = []
        cond_percp = []
        for k in range(0,len(allData2)):
            if allData2[k]['cond'] in ['prac1','prac2']:
                cond_prac.append(allData2[k])
            elif allData2[k]['cond'] == 'percp':
                cond_percp.append(allData2[k])
            elif allData2[k]['cond'] == think:
                cond_think.append(allData2[k])
            elif allData2[k]['cond'] == nothink:
                cond_nothink.append(allData2[k])
            elif allData2[k]['cond'] == baseline:
                cond_base.append(allData2[k])

        # set TNT stimulus
        TNT_cond = cond_think + cond_nothink + cond_percp
        block = TNT_cond + TNT_cond
        rep_formal_TNT = len(block)

        pool_fm = [x for x in (range(0,rep_formal_TNT))]
        random.shuffle(pool_fm)

        ind_test = cond_think + cond_nothink + cond_base
        dep_test = cond_think + cond_nothink + cond_base
        rep_indTest = len(ind_test)
        rep_depTest = len(dep_test)

        pool_test = [x for x in (range(0,rep_indTest))]
        random.shuffle(pool_test)

        # counterbalance final tests

        rand_number = random.randint(1,2)
        if rand_number == 1:
            random_indTest = 1
            random_depTest = 0
        elif rand_number == 2:
            random_indTest = 0
            random_depTest = 1
        # Key parameter
        win.mouseVisible = False
        TextColour = 'white'
        FontSize = 0.03

        # skip phase
        resting_rep = 1 #default = 1
        dropoff_rep = 1000 #default = 1000
        learnTest_rep = 1 #default = 1
        prac_rep = 1000 # default = 1000
        TNT_rep = 4 # default = 4 (replicate 4 times/blocks)
  Routine drop_fdbk_3
    TextComponent drop_fdbk_4
      color [set every repeat] = $msgcolor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    TextComponent drop_target2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text [set every repeat] = $cue + '             ' + target
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if alreadyLearned:
            continueRoutine = False
  Routine LearningTestIntro
    TextComponent LT_intro
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Now, your memory of all these pairs will be tested.

        You will be shown a word in each word pair, please try to recall the associate paired word.

        When you see the "SPEAK NOW" instruction, please say the associate word aloud. Please try to say as many word pairs as you can recall. Your accuracy will be recorded.

        No feedback will be given at this stage.

        Press SPACE to continue
    KeyboardComponent LT_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ParallelOutComponent start_recording
      address = 0xD010
      startData = 254
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = True
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  Routine TNTrest
    CodeComponent TNT_endcode
      Code Type = Auto->JS
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      Begin Routine:
        TNT_process = (TNTphase.thisN+1)/TNT_rep
        TNT_process_left = 1-TNT_process
        process_disply = f"You have completed {format(TNT_process,'.2%')} of task\n{format(TNT_process_left,'.2%')} remains"
      End Routine:
        random.shuffle(pool_fm)
        trl_fm = -1
    TextComponent process_info
      letterHeight = FontSize
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $process_disply
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    TextComponent BreakIntro
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press SPACE to continue the experiment after at least 5 seconds
    KeyboardComponent BreakEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine indepTest
    TextComponent say_intru_IT
      color = blue
      letterHeight = 0.025
      pos = (0, -0.05)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text = SPEAK NOW
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    TextComponent IT_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    KeyboardComponent IT_resp
      allowedKeys = 'f','j'
      correctAns = 'f'
      forceEndRoutine = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      storeCorrect = True
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    CodeComponent indTest_code
      Code Type = Auto->JS
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      Begin Routine:
        trl_test += 1
        loopIdx_test = pool_test[trl_test]
        stim_cat = ind_test[loopIdx_test]['category']
        stim_firstletter = ind_test[loopIdx_test]['firstL']
        stim_disp = stim_cat + '             ' + stim_firstletter + '__'
        IT_screen.setText(stim_disp)
        trigger_value = ind_test[loopIdx_test]['trigger_val']+20
        word_number = ind_test[loopIdx_test]['word_number'] - 100
      End Routine:
        indepTest_loop.addData('cue', ind_test[loopIdx_test]['cue'])
        indepTest_loop.addData('target', ind_test[loopIdx_test]['target'])
        indepTest_loop.addData('cond', ind_test[loopIdx_test]['cond'])
    ParallelOutComponent IT_trigger
      address = 0xD010
      startData = trigger_value
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent IT_WordNumber
      address = 0xD010
      startData = word_number
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine depTest
    TextComponent say_instruDT
      color = blue
      letterHeight = 0.025
      pos = (0,-0.05)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text = SPEAK NOW
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    TextComponent DT_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    KeyboardComponent DT_resp
      allowedKeys = 'f','j'
      correctAns = 'f'
      forceEndRoutine = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      storeCorrect = True
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    CodeComponent depTest_code
      Code Type = Auto->JS
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      Begin Routine:
        trl_test += 1
        loopIdx_test = pool_test[trl_test]
        stim_disp = dep_test[loopIdx_test]['cue']
        DT_screen.setText(stim_disp)

        trigger_value = dep_test[loopIdx_test]['trigger_val']+10
        word_number = dep_test[loopIdx_test]['word_number']
      End Routine:
        depTest_loop.addData('cue', dep_test[loopIdx_test]['cue'])
        depTest_loop.addData('target', dep_test[loopIdx_test]['target'])
        depTest_loop.addData('cond', dep_test[loopIdx_test]['cond'])
    ParallelOutComponent DT_trigger
      address = 0xD010
      startData = trigger_value
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent DT_WordNumber
      address = 0xD010
      startData = word_number
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine goodBye
    TextComponent taskend
      letterHeight = FontSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        TNT finished.

        Please wait for the experimenter.
    KeyboardComponent key_resp_end
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine test_accuray
  Routine test_accuracy
    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        acc = []
      Begin Routine:
        if not acc:
            masg = 'no info passed'
    TextComponent phase1_acc
      letterHeight = FontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $masg
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    TextComponent phase1_continue
      letterHeight = FontSize
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine TNT_Prac_trl
  Routine dropintro12
    TextComponent Intro_drop2
      letterHeight = FontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The aim of this stage is to help you to learn all of the word pairs, so the accuracy in this stage will not be recorded.


        Please press SPACE to continue

        Good luck!
    KeyboardComponent intDrop_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ISI_variable
    CodeComponent ISI_code
      Code Type = Auto->JS
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      Begin Routine:
        ISI = random.choice([p/5 for p in range(5, 13)])
    TextComponent fix600
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    TextComponent variable_ISI
      letterHeight = 0.03
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = ISI
      text = +
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    ParallelOutComponent fix_trigger
      address = 0xD010
      startData = 250
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine introPhase22
    TextComponent TNT_intro_2
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        After the end of cues, you need to answer if the associated word entered your mind in this trial by press "f" (yes) with your left index finger or "j" (no) with your right index finger. Please do not think too much and press it as quicky as possible based on your intuition.

        After reading a word presented in black font, do not respond.

        During this phase, please do fixate and concentrate on the word cue without looking away while the word is on screen.

        You can have a break if you see a slide saying take a break.

        You will have a chance to complete some practice examples before starting the experiment properly.

        Press SPACE to begin the practice.
    KeyboardComponent resp_intro2_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TNT_prc_qs1
    TextComponent prc_qs_text
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Please answer some questions about what you did earlier.

        1. When seeing the green word,  did you try to recall the paired word and keep it in mind?

        yes (press keyboard 1)

        no (press keyboard 0)
    KeyboardComponent qs_resp1
      allowedKeys = '0','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TNT_prc_qs2
    TextComponent prc_qs_text2
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        2. When seeing the *red* word,  did you try to not think about the paired word?

        yes (press keyboard 1)

        no (press keyboard 0)
    KeyboardComponent qs_resp2
      allowedKeys = '0','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TNT_prc_qs3
    TextComponent prc_qs_text3
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        3. When seeing the cue word,  did you think about any other unrelated information?

        yes (press keyboard 1)

        no (press keyboard 0)
    KeyboardComponent qs_resp3
      allowedKeys = '0','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_end
    TextComponent prc_end
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Remember, you are expected to try to think about the paired word if the cue word is green, and try to do *not* to think about the paired word if the cue word is red.

        Please do not think about any unrelated information to distract you during the task, and please try not to move your eyes away from the central cross at any time while the cross and cue words are presented.

        Press SPACE to continue.
    KeyboardComponent prc_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase2_trial_prac
    CodeComponent prac_code
      Code Type = Auto->JS
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      Begin Experiment:
        rep_prac_TNT = len(cond_prac)
        stim_disp = 'it does not work'
        color = "white"
        loopIdx = -1
      Begin Routine:
        loopIdx += 1
        stim_disp = cond_prac[loopIdx]['cue']
        cue_prac.setText(stim_disp)
        if cond_prac[loopIdx]['cond'] == 'prac1':
            color = "red"
        else :
            color = "green"
      End Routine:
        TNT_prac_loop.addData('cue', cond_prac[loopIdx]['cue']) #where trials is the name of the loop
    TextComponent cue_prac
      color [set every repeat] = $color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine phase2_trial_fm
    CodeComponent prac_fm
      Code Type = Auto->JS
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      Begin Experiment:
        stim_disp = 'it does not work'
        color = "white"

        trl_fm = -1
      Begin Routine:
        trl_fm += 1
        loopIdx_fm = pool_fm[trl_fm]
        stim_disp = block[loopIdx_fm]['cue']
        cue_fm.setText(stim_disp)
        trigger_value = block[loopIdx_fm]['trigger_val']
        word_number = block[loopIdx_fm]['word_number']
        if block[loopIdx_fm]['cond'] == nothink:
            color = 'red'
        elif block[loopIdx_fm]['cond'] == think:
            color = 'green'
        else:
            color = 'black'
      End Routine:
        TNTPhase_block.addData('cue', block[loopIdx_fm]['cue']) #where trials is the name of the loop
        TNTPhase_block.addData('color', color) #where trials is the name of the loop
        TNTPhase_block.addData('cond', block[loopIdx_fm]['cond']) #where trials is the name of the loop
        TNTPhase_block.addData('target', block[loopIdx_fm]['target']) #where trials is the name of the loop
    TextComponent cue_fm
      color [set every repeat] = $color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ParallelOutComponent TNT_trigger
      address = 0xD010
      startData = trigger_value
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pair_mark
      address = 0xD010
      startData = word_number
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine prac_end2
    TextComponent prc_end2
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Please make sure you understand the rules clearly, or your data would seriously harm the results of our experiment!

        Press "p" if you do not understand these rules very clearly and if you want to practice one more time.

        Press SPACE if you think you are clear and are ready to begin the formal session.
    KeyboardComponent prc_end_resp2
      allowedKeys = 'p','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_end3
    CodeComponent pracEnd_code
      Code Type = Auto->JS
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      Begin Routine:
        loopIdx = -1
        random.shuffle(cond_prac)
        if prc_end_resp2.keys == 'space':
            Prac_rep.finished = True
  Routine fmIntro1
    TextComponent fmIntro_txt
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        This section will take around 40 minutes to complete.

        During this phase, please follow the instructions you just learned:

        green font: recall and keep the paired word in mind

        red font: prevent the paired word from coming to mind

        black font: simply pay attention to the cue word

        Press SPACE to continue.
    KeyboardComponent fmIntro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fmIntro2
    TextComponent fmIntro_txt2
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Please fixate and concentrate on the word cue without looking away while the word appeared.

        It's very important for our study!

        You can have a rest when you see the resting instruction.

        Now, please choose a comfortable sitting position.

        Press SPACE to begin the task.
    KeyboardComponent fmIntro_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroIndTest
    TextComponent text
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Different Probe Test

        In this test, you will be given the category and the first letter of the paired word (right handed) you remember earlier. When you see the "SPEAK NOW" instruction, try to say this word aloud if you remember it.

        Note that you are expected to recall as of the words as you can regardless previous conditions.

        Press SPACE to begin test.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent test_setting
      Code Type = Auto->JS
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      Begin Routine:
        trl_test = -1
        random.shuffle(pool_test)
  Routine IntroDepTest
    TextComponent intro_ind
      letterHeight = FontSize
      startVal [time (s)] = 0.0
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      text:
        Same Probe Test

        In this test, you are expected to try your best to recall all the associate paired words of the presented cue. When you see the "SPEAK NOW" instruction, try to say this word aloud.

        Note that you need to say any words you can recall aloud regardless of the previous task.

        Press SPACE to begin test.
    KeyboardComponent key_resp_ind
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_test
      Code Type = Auto->JS
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      Begin Routine:
        trl_test = -1
        random.shuffle(pool_test)
  Routine randomizer
    CodeComponent randomizer_code
      Code Type = Auto->JS
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      Begin Routine:
        temp = random_indTest
        random_indTest = random_depTest
        random_depTest = temp
  Routine short_break
    CodeComponent break10_code
      Code Type = Auto->JS
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      Begin Routine:
        if (trl_fm+1)%20 is not 0:
            continueRoutine = False
    TextComponent break10s
      letterHeight = FontSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Take a break!

        You can relax your eyes and body, and clear you throat at this moment.

        The task will begin automatically in...
    TextComponent timer_10
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 10 s
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    TextComponent var_9
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 9 s
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    TextComponent var_8
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 8 s
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    TextComponent var_7
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 7 s
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    TextComponent var_6
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 6 s
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    TextComponent var_5
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 5 s
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    TextComponent var_4
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 4 s
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    TextComponent var_3
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 3 s
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    TextComponent var_2
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      text = 2 s
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    TextComponent var_1
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      text = 1 s
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  Routine rate_awareness
    TextComponent ratePrac_instruText
      letterHeight = FontSize
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Did the associated word come to mind, even briefly?
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    TextComponent ratePrac_text
      letterHeight = FontSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Yes (press "f")                         No (press "j")
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    KeyboardComponent ratePrac_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine rs_instruction
    TextComponent rs_instr_title
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Resting State Recording
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    TextComponent rs_instr_text
      letterHeight [set every repeat] = FontSize
      pos = (0, -0.0)
      startVal [time (s)] = 0.0
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      text:
        The part of this study involves taking a resting state recording. This simply involves sitting still for short period of time whilst we record your brain activity. During this time feel free to let your mind wander - it's not important to the experiment what you're thinking here

        When the recording begins you will be presented with a small + symbol in the middle of the screen. Please stare at this cross and continue to sit still until you see the next instruction. As blinking can make noise in the EEG signal, please try to blink as little as you comfortably can.
    TextComponent rs_instr_resptext
      letterHeight [set every repeat] = FontSize
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Please press SPACE to begin
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    KeyboardComponent rs_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine countdown
    TextComponent countdown_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Beginning task in...
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    TextComponent timer_text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent timer_text_4
      letterHeight = 0.04
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 4
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    TextComponent timer_text_3
      letterHeight = 0.04
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent timer_text_2
      letterHeight = 0.04
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent timer_text_1
      letterHeight = 0.04
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine resting_state
    PolygonComponent rs_fixation
      fillColor = white
      shape = cross
      size [set every repeat] = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 305
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    ParallelOutComponent rsEo_begin
      address = 0xD010
      startData = 90
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent rsEO_end
      address = 0xD010
      startData = 91
      startVal [time (s)] = 300
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine short_break_dropoff
    CodeComponent break20_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if Dropoff_phase.thisN % 20 is not 0:
            continueRoutine = False
    TextComponent break20s_2
      letterHeight = FontSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Take a break!

        You can relax your eyes and body, and clear you throat at this moment.

        The task will begin automatically in...
    TextComponent timer
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 20 s
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    TextComponent var
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 19 s
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    TextComponent var_20
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 18 s
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    TextComponent var_21
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 17 s
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    TextComponent var_22
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 16 s
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    TextComponent var_23
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 15 s
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    TextComponent var_24
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 14 s
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    TextComponent var_25
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 13 s
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    TextComponent var_26
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      text = 12 s
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    TextComponent var_27
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      text = 11 s
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    TextComponent var_28
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 10
      stopVal [duration (s)] = 1.0
      text = 10 s
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    TextComponent var_29
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 11
      stopVal [duration (s)] = 1.0
      text = 9 s
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    TextComponent var_30
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 12
      stopVal [duration (s)] = 1.0
      text = 8 s
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    TextComponent var_31
      letterHeight = FontSize
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 13
      stopVal [duration (s)] = 1.0
      text = 7 s
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Flow
  Routine setupExp
  Routine WelcomeScreen
  LoopInitiator rs_eeg loopType="TrialHandler"
    loopType = random
    nReps = resting_rep
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    Routine rs_instruction
    Routine countdown
    Routine resting_state
  LoopTerminator rs_eeg
  Routine dropIntro
  Routine dropintro12
  LoopInitiator Dropoff_phase loopType="TrialHandler"
    conditionsFile = Stimuli_TNT.xlsx
    loopType = random
    nReps = dropoff_rep
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    conditions:
      [{'cue': 'c1', 'target': 't1'},
      {'cue': 'c2', 'target': 't2'},
      {'cue': 'c3', 'target': 't3'},
      {'cue': 'c4', 'target': 't4'},
      {'cue': 'c5', 'target': 't5'},
      {'cue': 'c6', 'target': 't6'}]
    Routine phase1_trial2
    Routine drop_fdbk_3
  LoopTerminator Dropoff_phase
  Routine LearningTestIntro
  LoopInitiator learning_test loopType="TrialHandler"
    conditionsFile = Stimuli_TNT.xlsx
    loopType = random
    nReps = learnTest_rep
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    conditions:
      [{'cue': 'c1', 'target': 't1'},
      {'cue': 'c2', 'target': 't2'},
      {'cue': 'c3', 'target': 't3'}]
    Routine ISI_variable
    Routine phase1_trial
  LoopTerminator learning_test
  Routine test_accuracy
  LoopInitiator Prac_rep loopType="TrialHandler"
    loopType = random
    nReps = prac_rep
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    Routine IntroPhase2
    Routine introPhase22
    LoopInitiator TNT_prac_loop loopType="TrialHandler"
      loopType = random
      nReps = rep_prac_TNT
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      Routine ISI_variable
      Routine phase2_trial_prac
      Routine rate_awareness
    LoopTerminator TNT_prac_loop
    Routine TNT_prc_qs1
    Routine TNT_prc_qs2
    Routine TNT_prc_qs3
    Routine prac_end
    Routine prac_end2
    Routine prac_end3
  LoopTerminator Prac_rep
  Routine fmIntro1
  Routine fmIntro2
  LoopInitiator TNTphase loopType="TrialHandler"
    loopType = random
    nReps = TNT_rep
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    LoopInitiator TNTPhase_block loopType="TrialHandler"
      loopType = random
      nReps = rep_formal_TNT
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      Routine ISI_variable
      Routine phase2_trial_fm
      Routine rate_awareness
      Routine short_break
    LoopTerminator TNTPhase_block
    Routine TNTrest
  LoopTerminator TNTphase
  LoopInitiator random_test loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator indepTest_trial loopType="TrialHandler"
      loopType = random
      nReps = random_indTest
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      Routine IntroIndTest
      LoopInitiator indepTest_loop loopType="TrialHandler"
        loopType = sequential
        nReps = rep_indTest
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        Routine indepTest
      LoopTerminator indepTest_loop
    LoopTerminator indepTest_trial
    LoopInitiator depTest_trial loopType="TrialHandler"
      loopType = random
      nReps = random_depTest
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      Routine IntroDepTest
      LoopInitiator depTest_loop loopType="TrialHandler"
        loopType = sequential
        nReps = rep_depTest
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        Routine depTest
      LoopTerminator depTest_loop
    LoopTerminator depTest_trial
    Routine randomizer
  LoopTerminator random_test
  Routine goodBye
